PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = False
  HTML path = html/
  Monitor = testMonitor
  Resources = ['html/resources/images/409_Animals.png', 'html/resources/images/402_Animals.png', 'html/resources/images/386_Cars.png', 'html/resources/images/352_Cars.png', 'html/resources/images/306_Planes.png', 'html/resources/images/188_Chairs.png', 'html/resources/images/157_Chairs.png']
  Screen = 1
  Units = height
  Window size (pixels) = [720, 720]
  expName = 1back_category
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine SessionIntro
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    TextComponent sessText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press Enter to start
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    KeyboardComponent sessKey
      allowedKeys = 'return','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent sessGate
      Code Type = Auto->JS
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      Begin Routine:
        if prevSession is None or session != prevSession:
            continueRoutine = True
            sessText.setText(f"Session: {session}\nPress Enter to start")
        else:
            continueRoutine = False
      End Routine:
        prevSession = session
  Routine Globals
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    CodeComponent globals
      Code Type = Auto->JS
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      Begin Experiment:
        prevSession = None    # track when session changes
        frameIdx = -1         # 0..5 within a trial
        stimPaths = []        # 6 strings for this trial
        actKeys = []          # [None, act2..act6]
  Routine TrialIntro
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    TextComponent trialText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press Enter to start the trial
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    KeyboardComponent trialKey
      allowedKeys = 'return','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trialPrep
      Code Type = Auto->JS
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      Begin Routine:
        frameIdx = -1

        # Lowercase helper
        def low(s): return s.lower() if isinstance(s, str) else s

        # Build lists from your CSV columns
        stimPaths = [stim1, stim2, stim3, stim4, stim5, stim6]
        actKeys   = [None, low(act2), low(act3), low(act4), low(act5), low(act6)]
  Routine Frame
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    CodeComponent frameLogic
      Code Type = Both
      disabled = True
      Begin Experiment:
        from psychopy import core, event

        # Declared once so they exist before first routine draw
        frameIdx = -1
        frameClock = None

        expected = ""
        allowedKeys = []
      Begin JS Experiment:
        // Declared once so they exist before first routine draw
        let frameIdx = -1;
        let frameClock;
        let expected = "";
        let allowedKeys = [];
      Begin JS Routine:
        // These variables (stim1..stim6, act2..act6) come from the CSV via the Loop
        // Build per-trial arrays from the row's columns
        var stimPaths = [stim1, stim2, stim3, stim4, stim5, stim6];
        var actKeys   = ["", act2, act3, act4, act5, act6];  // first image has no response

        // Create/reset clock
        if (typeof frameClock === "undefined" || frameClock === null) {
          frameClock = new util.Clock();
        } else {
          frameClock.reset();
        }

        // Start at first image for this trial
        frameIdx = 0;

        // Avoid '??' — use a ternary and then String() to be safe
        expected = String(
          (actKeys[frameIdx] !== undefined && actKeys[frameIdx] !== null) ? actKeys[frameIdx] : ""
        ).toLowerCase();

        allowedKeys = [];  // first image has no response


        psychoJS.eventManager.clearEvents();
      Begin Routine:
        # These variables (stim1..stim6, act2..act6) come from the CSV via the Loop
        # Build per-trial arrays from the row's columns
        stimPaths = [stim1, stim2, stim3, stim4, stim5, stim6]
        actKeys   = ["", act2, act3, act4, act5, act6]  # first image has no response

        # Create/reset clock
        frameClock = frameClock or core.Clock()
        frameClock.reset()

        # Start at first image for this trial
        frameIdx = 0

        expected = (actKeys[frameIdx] or "").lower()
        allowedKeys = []  # first image has no response



        event.clearEvents()
      Each Frame:
        if frameClock.getTime() >= 2.0:
            continueRoutine = False
      Each JS Frame:
        if ((frameClock.getTime() >= 2.0)) {
            continueRoutine = false;
        }
      End JS Routine:
        kraw = resp.keys;
        if ((kraw instanceof list)) {
            resp_key = (kraw ? kraw[0] : null);
        } else {
            if ((((typeof kraw) === "string") || (kraw instanceof String))) {
                resp_key = kraw;
            } else {
                resp_key = null;
            }
        }
        rtraw = (resp["rt"] || null);
        if (((rtraw instanceof list) || (rtraw instanceof tuple))) {
            resp_rt = (rtraw ? rtraw[0] : null);
        } else {
            resp_rt = rtraw;
        }
        correct = null;
        if ((frameIdx > 0)) {
            rk = ((((typeof resp_key) === "string") || (resp_key instanceof String)) ? resp_key.toLowerCase() : resp_key);
            correct = Number.parseInt((rk === expected));
        }
        psychoJS.experiment.addData("frameIdx", frameIdx);
        psychoJS.experiment.addData("stimFile", currStim);
        psychoJS.experiment.addData("expected", ((expected !== null) ? expected : ""));
        psychoJS.experiment.addData("resp", ((resp_key !== null) ? resp_key : ""));
        psychoJS.experiment.addData("rt", ((resp_rt === null) ? "" : resp_rt));
        psychoJS.experiment.addData("correct", ((correct === null) ? "" : correct));
      End Routine:
        # Grab key and RT robustly (last key -> str/float; all keys -> list)
        kraw = resp.keys
        if isinstance(kraw, list):
            resp_key = kraw[0] if kraw else None
        elif isinstance(kraw, str):
            resp_key = kraw
        else:
            resp_key = None

        rtraw = getattr(resp, 'rt', None)
        if isinstance(rtraw, (list, tuple)):
            resp_rt = rtraw[0] if rtraw else None
        else:
            resp_rt = rtraw  # float or None

        # score only from frame 2+
        correct = None
        if frameIdx > 0:
            rk = resp_key.lower() if isinstance(resp_key, str) else resp_key
            correct = int(rk == expected)

        thisExp.addData('frameIdx', frameIdx)
        thisExp.addData('stimFile', currStim)
        thisExp.addData('expected', expected if expected is not None else '')
        thisExp.addData('resp', resp_key if resp_key is not None else '')
        thisExp.addData('rt', '' if resp_rt is None else resp_rt)
        thisExp.addData('correct', '' if correct is None else correct)
    ImageComponent img
      image [set every repeat] = $stimPaths[int(frames.thisN)]
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent resp
      allowedKeys = 'x','b'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent framPrep
      Code Type = Both
      Begin JS Routine:
        // advance within this trial's 6 frames
        frameIdx += 1;

        // guard against out-of-range
        if (frameIdx >= stimPaths.length) {
          continueRoutine = false;
        } else {
          // pick the current stimulus and expected key from the lists built in TrialIntro
          currStim = (stimPaths[frameIdx] !== undefined && stimPaths[frameIdx] !== null)
            ? stimPaths[frameIdx]
            : "images/157_Chairs.png";

          expected = String(
            (actKeys[frameIdx] !== undefined && actKeys[frameIdx] !== null) ? actKeys[frameIdx] : ""
          ).toLowerCase();

          // set the image BEFORE the Image component draws
          img.setImage(currStim);
          psychoJS.eventManager.clearEvents();
        }
      Begin Routine:
        # advance within this trial's 6 frames
        frameIdx += 1

        # guard against out-of-range
        if frameIdx >= len(stimPaths):
            continueRoutine = False
        else:
            # pick the current stimulus and expected key from the lists built in TrialIntro
            currStim = stimPaths[frameIdx]
            expected = (actKeys[frameIdx] or "")
            if isinstance(expected, str):
                expected = expected.lower()

            # set the image BEFORE the Image component draws
            img.setImage(currStim)
            event.clearEvents()
  Routine ITI
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    TextComponent itiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Next trial in 5s - press Enter to start now
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    KeyboardComponent itiKey
      allowedKeys = 'return','enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent itiTimer
      Code Type = Auto->JS
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      Begin Routine:
        # make/reset a clock for this routine
        if 'itiClock' not in globals():
            itiClock = core.Clock()
        else:
            itiClock.reset()
      Each Frame:
        if itiClock.getTime() >= 5.0:
            continueRoutine = False
Flow
  Routine Globals
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 1back_category_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('session', 1), ('stim1', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/157_Chairs.png'), ('stim2', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/188_Chairs.png'), ('stim3', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/306_Planes.png'), ('stim4', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/352_Cars.png'), ('stim5', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/386_Cars.png'), ('stim6', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/402_Animals.png'), ('act2', 'X'), ('act3', 'B'), ('act4', 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,
      OrderedDict([('session', 1), ('stim1', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/157_Chairs.png'), ('stim2', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/188_Chairs.png'), ('stim3', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/306_Planes.png'), ('stim4', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/352_Cars.png'), ('stim5', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/386_Cars.png'), ('stim6', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/402_Animals.png'), ('act2', 'X'), ('act3', 'B'), ('act4', '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,
      OrderedDict([('session', 2), ('stim1', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/157_Chairs.png'), ('stim2', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/188_Chairs.png'), ('stim3', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/306_Planes.png'), ('stim4', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/352_Cars.png'), ('stim5', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/386_Cars.png'), ('stim6', '/Users/xiaoxuan/Desktop/202510_proj_nat_abs_pyschopy/images/402_Animals.png'), ('act2', 'X'), ('act3', 'X'), ('act4', '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
    Routine SessionIntro
    Routine TrialIntro
    LoopInitiator frames loopType="TrialHandler"
      loopType = sequential
      nReps = 6
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      Routine Frame
    LoopTerminator frames
  LoopTerminator trials
  Routine ITI
